<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:CreateSerialPort">
          <port:PortName>COM4</port:PortName>
          <port:BaudRate>115200</port:BaudRate>
          <port:NewLine>\r\n</port:NewLine>
          <port:Parity>None</port:Parity>
          <port:ParityReplace>63</port:ParityReplace>
          <port:DataBits>8</port:DataBits>
          <port:StopBits>One</port:StopBits>
          <port:Handshake>None</port:Handshake>
          <port:DiscardNull>false</port:DiscardNull>
          <port:DtrEnable>true</port:DtrEnable>
          <port:RtsEnable>false</port:RtsEnable>
          <port:ReadBufferSize>4096</port:ReadBufferSize>
          <port:WriteBufferSize>2048</port:WriteBufferSize>
          <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialReadLine">
          <port:PortName>COM4</port:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value,Timestamp</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="BarCodeFileName" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Data\IM-xxxx_BarCodeTimestamps_2024-01-16-161555.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FlyCapture">
          <p1:Index>0</p1:Index>
          <p1:ColorProcessing>Default</p1:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Metadata</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>it</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FlyCapture">
          <p1:Index>1</p1:Index>
          <p1:ColorProcessing>Default</p1:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Metadata</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>it</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="PinFileName" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Data\IM-xxxx_FaceCam_pinstate_2024-01-16-161555.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Concat">
          <dsp:Axis>1</dsp:Axis>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ImageWriter">
          <cv:Path>\\.\pipe\videopipe1</cv:Path>
          <cv:Suffix>None</cv:Suffix>
          <cv:Overwrite>false</cv:Overwrite>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="16" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="12" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="17" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="16" To="18" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>